PsychoPy2experiment version="2023.1.2"
Settings
  Audio latency priority = 1
  Audio lib = ptb
  Experiment info = {'participant': 'Enter Value', 'session': 'Enter Value', 'tokenAudio/Visual': 'Enter Value', 'distractorsSetting': 'Enter Value', 'scnHeightCM-vDistance-maxRDKSize': 'Enter Value'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['audio/_.wav', 'audio/1.wav', 'audio/2.wav', 'audio/3.wav', 'audio/4.wav', 'audio/5.wav', 'audio/6.wav', 'audio/8.wav', 'audio/9.wav', 'audio/F.wav', 'audio/G.wav', 'audio/H.wav', 'audio/J.wav', 'audio/K.wav', 'audio/M.wav', 'audio/N.wav', 'audio/P.wav', 'audio/Q.wav', 'audio/R.wav', 'audio/S.wav', 'audio/X.wav', 'audio/Y.wav']
  Screen = 4
  Units = height
  Use version = 2023.1.2
  Window size (pixels) = [1280, 720]
  expName = training
  keyboardBackend = ioHub
  logging level = error
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Routines
  Routine trial
    CodeComponent rdk
      Code Type = JS
      Before JS Experiment:
        function randomDotInCircle(_diameter) {
            const _angle = Math.random()*2*pi;
            const _length = (_diameter/2)*sqrt(Math.random());
            const _xPos = _length*cos(_angle);
            const _yPos = _length*sin(_angle);
            return [_xPos, _yPos];
        }

        function selectNewDirection(_oldPos, _direction, _speed) {
            if(_direction == 'R') {
                return [_oldPos[0]+_speed, _oldPos[1]];
            }
            else if(_direction == 'L') {
                return [_oldPos[0]-_speed, _oldPos[1]];
            }
            const _angle = Math.random()*2*pi;
            return [_oldPos[0]+(_speed*cos(_angle)), _oldPos[1]+(_speed*sin(_angle))];
        }
      Begin JS Experiment:
        screenConfigs = expInfo['scnHeightCM-vDistance-maxRDKSize'].split('-');

        heightCM = parseFloat(screenConfigs[0])
        distanceCM = parseFloat(screenConfigs[1])
        const rad2deg = rad => (rad * 180.0) / Math.PI;
        degHeight = rad2deg(Math.atan2(.5 * heightCM, distanceCM)) / (.5)
        maxRDKSize = parseFloat(screenConfigs[2])
        rdkStartTime = [0.55, 1.1, 1.65, 2.2, 2.75, 3.3, 3.85, 4.4];
        rdkDuration = 0.5;
        rdkSize = 20/degHeight <= maxRDKSize ? 20/degHeight : maxRDKSize;
        rdkDotCount = 200;

        rdkAllDots = [];

        rdkOpacity = 1;

        if(enableRDK !== 'yes') {
            rdkOpacity = 0;
        }

        dotSize = 20/degHeight <=maxRDKSize ? 0.2/degHeight : (0.2/degHeight)*maxRDKSize/(20/degHeight)
        for(let i=0; i<rdkDotCount; i++) {
            rdkAllDots[i] = new visual.Polygon({
                win: psychoJS.window, name: 'polygon', unit:'height',
                edges: 512, size:[dotSize,dotSize],
                ori: 0.0, pos: [0, 0],
                anchor: 'center',
                lineWidth: 0.0,
                colorSpace: 'rgb',
                lineColor: new util.Color('white'),
                fillColor: new util.Color('white'),
                opacity: rdkOpacity, depth: -2.5, interpolate: true,
                });
        }

        document.body.style.cursor='none';
      Begin JS Routine:
        //rdkLifeTime = 4;
        //rdkSpeed = 0.01;
        //rdkCoherence = 1;
        //rdkDir = ['L', 'R', '_', 'L', 'R', '_', '_', '_'];

        rdkIndex = 0;
        rdkStatus = PsychoJS.Status.NOT_STARTED;

        rdkNoise = [];
        rdkSignal = [];

        REALRDKSPEED = 20/degHeight <=maxRDKSize ? (rdkSpeed * psychoJS.window.monitorFramePeriod)/degHeight : ((rdkSpeed * psychoJS.window.monitorFramePeriod)/degHeight)*maxRDKSize/(20/degHeight)

        signalCount = round(rdkDotCount*rdkCoherence);
        for(let i=0; i<signalCount; i++) {
            rdkSignal[i] = rdkAllDots[i];
        }

        for(let i=signalCount; i<rdkDotCount; i++) {
            rdkNoise[i-signalCount] = rdkAllDots[i];
        }
      Each JS Frame:
        if (t >= rdkStartTime[rdkIndex] && rdkStatus !== PsychoJS.Status.STARTED) {
            for(const _dotComp of rdkSignal) {
                _dotComp.frameNStart = frameN;
                _dotComp.setPos(randomDotInCircle(rdkSize));
                _dotComp.setAutoDraw(true);
            }
            for(const _dotComp of rdkNoise) {
                _dotComp.frameNStart = frameN;
                _dotComp.setPos(randomDotInCircle(rdkSize));
                _dotComp.setAutoDraw(true);
            }
            rdkStatus = PsychoJS.Status.STARTED;
        }

        if(rdkStatus === PsychoJS.Status.STARTED) {
            for(const _dotComp of rdkSignal) {
                const oldPos = _dotComp.pos;
                const newPos = selectNewDirection(oldPos, rdkDir[rdkIndex], REALRDKSPEED);
                _dotComp.setPos(newPos);
                if(newPos[0]*newPos[0] + newPos[1]*newPos[1] > (rdkSize/2)*(rdkSize/2) ||
                   frameN - _dotComp.frameNStart > rdkLifeTime) {
                    _dotComp.frameNStart = frameN;
                    _dotComp.setPos(randomDotInCircle(rdkSize));
                }
            }
            for(const _dotComp of rdkNoise) {
                const oldPos = _dotComp.pos;
                const newPos = selectNewDirection(oldPos, '_', REALRDKSPEED);
                _dotComp.setPos(newPos);
                if(newPos[0]*newPos[0] + newPos[1]*newPos[1] > (rdkSize/2)*(rdkSize/2) ||
                   frameN - _dotComp.frameNStart > rdkLifeTime) {
                    _dotComp.frameNStart = frameN;
                    _dotComp.setPos(randomDotInCircle(rdkSize));
                }
            }
        }

        frameRemains = rdkStartTime[rdkIndex] + rdkDuration - psychoJS.window.monitorFramePeriod * 0.75;  // most of one frame period left
        if (rdkStatus === PsychoJS.Status.STARTED && t >= frameRemains) {
            for(const _dotComp of rdkSignal) {
                _dotComp.setAutoDraw(false);
            }
            for(const _dotComp of rdkNoise) {
                _dotComp.setAutoDraw(false);
            }
            rdkIndex = (rdkIndex + 1) % rdkStartTime.length;
            rdkStatus = PsychoJS.Status.STOPPED;
        }
      End JS Experiment:
        document.body.style.cursor='auto';
        document.exitFullscreen();
      End JS Routine:
        for(const _dotComp of rdkSignal) {
            if (typeof _dotComp.setAutoDraw === 'function') {
                _dotComp.setAutoDraw(false);
            }
        }

        for(const _dotComp of rdkNoise) {
            if (typeof _dotComp.setAutoDraw === 'function') {
                _dotComp.setAutoDraw(false);
            }
        }
    CodeComponent playBeeps
      Code Type = JS
      Before JS Experiment:
        const MYCONTEXT = new AudioContext();

        function createSOURCE(arr) {
          var buffer = MYCONTEXT.createBuffer(1, arr.length, 48000)
          var buf = buffer.getChannelData(0);
          for (var i = 0; i < arr.length; i++) buf[i] = arr[i];
          var source = MYCONTEXT.createBufferSource();
          source.buffer = buffer;
          source.connect(MYCONTEXT.destination);
          return source
        }
      Begin JS Experiment:
        SOURCE_START_TIME = [0.55, 1.1, 1.65, 2.2, 2.75, 3.3, 3.85, 4.4];
      Begin JS Routine:
        SOURCES = [];
        SOURCE_STARTED = [];
        for(let i=0; i<beeps.length; i++) {
            if (enableAcoustic !== 'yes') {
                SOURCE_STARTED[i] = true;
            } else {
                SOURCES[i] = createSOURCE(beeps[i]);
                SOURCE_STARTED[i] = false;
            }
        }
      Each JS Frame:
        for(let i=0; i<SOURCE_START_TIME.length; i++) {
            if(t>= SOURCE_START_TIME[i] && SOURCE_STARTED[i]==false) {
                SOURCES[i].start(0);
                SOURCE_STARTED[i] = true;
            }
        }
    PolygonComponent bigCircle
      fillColor = black
      lineColor = black
      opacity = rdkOpacity
      shape = circle
      size = (rdkSize, rdkSize)
      startVal [time (s)] = 0.55
      stopVal [time (s)] = 5
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    PolygonComponent token_bg
      fillColor = gray
      lineColor = gray
      saveStartStop = False
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.55
      stopVal [time (s)] = 5
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    SoundComponent dummySound
      disabled = True
      sound = C
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent sound0
      durationEstim = 0.350
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $soundArray[0]
      startVal [time (s)] = 0.625
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    TextComponent token0
      letterHeight = 0.1
      opacity [set every repeat] = OPACITY
      saveStartStop = False
      startVal [time (s)] = 0.625
      stopVal [duration (s)] = 0.350
      text [set every repeat] = $token[0]
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    SoundComponent sound1
      durationEstim = 0.350
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $soundArray[1]
      startVal [time (s)] = 1.175
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    TextComponent token1
      letterHeight = 0.1
      opacity [set every repeat] = OPACITY
      saveStartStop = False
      startVal [time (s)] = 1.175
      stopVal [duration (s)] = 0.350
      text [set every repeat] = $token[1]
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    SoundComponent sound2
      durationEstim = 0.350
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $soundArray[2]
      startVal [time (s)] = 1.725
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    TextComponent token2
      letterHeight = 0.1
      opacity [set every repeat] = OPACITY
      saveStartStop = False
      startVal [time (s)] = 1.725
      stopVal [duration (s)] = 0.350
      text [set every repeat] = $token[2]
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    SoundComponent sound3
      durationEstim = 0.350
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $soundArray[3]
      startVal [time (s)] = 2.275
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    TextComponent token3
      letterHeight = 0.1
      opacity [set every repeat] = OPACITY
      saveStartStop = False
      startVal [time (s)] = 2.275
      stopVal [duration (s)] = 0.350
      text [set every repeat] = $token[3]
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    SoundComponent sound4
      durationEstim = 0.350
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $soundArray[4]
      startVal [time (s)] = 2.825
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    TextComponent token4
      letterHeight = 0.1
      opacity [set every repeat] = OPACITY
      saveStartStop = False
      startVal [time (s)] = 2.825
      stopVal [duration (s)] = 0.350
      text [set every repeat] = $token[4]
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    SoundComponent sound5
      durationEstim = 0.350
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $soundArray[5]
      startVal [time (s)] = 3.375
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    TextComponent token5
      letterHeight = 0.1
      opacity [set every repeat] = OPACITY
      saveStartStop = False
      startVal [time (s)] = 3.375
      stopVal [duration (s)] = 0.350
      text [set every repeat] = $token[5]
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    SoundComponent sound6
      durationEstim = 0.350
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $soundArray[6]
      startVal [time (s)] = 3.925
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    TextComponent token6
      letterHeight = 0.1
      opacity [set every repeat] = OPACITY
      saveStartStop = False
      startVal [time (s)] = 3.925
      stopVal [duration (s)] = 0.350
      text [set every repeat] = $token[6]
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    SoundComponent sound7
      durationEstim = 0.350
      hamming = False
      saveStartStop = False
      sound [set every repeat] = $soundArray[7]
      startVal [time (s)] = 4.475
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    TextComponent token7
      letterHeight = 0.1
      opacity [set every repeat] = OPACITY
      saveStartStop = False
      startVal [time (s)] = 4.475
      stopVal [duration (s)] = 0.350
      text [set every repeat] = $token[7]
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    TextComponent tokenText
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $token
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    TextComponent opacity_text
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $('opacity:'+opacity)
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    TextComponent rdkDirectionText
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $rdkDir
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    CodeComponent makeRoutineEnd
      Code Type = Auto->JS
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      Each Frame:
        if t > 5 :
            continueRoutine = False
    TextComponent rdkParamText
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $('rdk:rdkLifeTime=' + rdkLifeTime + ',rdkSpeed=' + rdkSpeed + ',rdkCoherence=' + rdkCoherence)
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  Routine welcome
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will either HEAR or SEE a sequence of letters and numbers.

        Type the two numbers in the order that you hear/see them, then press ENTER. The number '0' will not be used.

        Press space to start.
  Routine answer
    TextboxComponent answerBox
      autoLog = False
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      saveStartStop = False
      size = (0.2, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent onlyNumber
      Code Type = JS
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      Begin JS Routine:
        document.addEventListener('keydown', event => {
            console.log(`User pressed: ${event.key}`);
            if(['0','1','2','3','4','5','6','7','8','9'].includes(event.key) && answerBox.text.length < 2) {
                return true;
            }
            if(event.key === "Backspace" || event.key === "Enter") {
                return true;
            }
            event.preventDefault();
            return false;
        });
      Each JS Frame:
        if (answerBox.text.includes('\n')) {
            continueRoutine = false;
        }
      End JS Routine:
        if ((answerBox.text.length > 2)) {
            answerBox.text = answerBox.text.slice(0, 2);
        }
    CodeComponent addionalData
      Code Type = Auto->JS
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      End Routine:
        trials.addData("answerTime", t)
        trials.addData("token", token)
        target = targets[0:2]
        trials.addData("target", target)

        if len(answerBox.text) == 2 :
            if answerBox.text[0] == target[0] and answerBox.text[1] == target[1] :
                trials.addData("correct", 1)
            else :
                trials.addData("correct", 0)
        else :
            trials.addData("correct", 0)


        trials.addData('taskType','audio' if expInfo['enableAudio']=='yes' else 'visual')
  Routine prepare
    CodeComponent set_token
      Code Type = Auto->JS
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      Begin Experiment:
        targets = ['1','2','3','4','5','6','8','9']
        distractors = ['F','G','H','J','K','M','N','P','Q','R','S','X','Y']
        positions = [1,2,3,4,5] # available positions for targets
      Begin Routine:
        shuffle(targets)
        shuffle(distractors)
        shuffle(positions)

        [posA, posB] = [positions[0], positions[1]]
        if posA > posB :
            temp = posA
            posA = posB
            posB = temp

        token = []
        for x in distractors[0:posA] :
            token.append(x)
        token.append(targets[0])
        for x in distractors[posA:posB] :
            token.append(x)
        token.append(targets[1])
        for x in distractors[posB:6] :
            token.append(x)
    CodeComponent initiate_sound
      Code Type = Both
      disabled = True
      Before Experiment:
        from scipy import signal
        def butter_highpass_filter(data: np.ndarray, cutoff: float, sample_rate: float, poles: int = 5):
            sos = signal.butter(poles, cutoff, 'highpass', fs=sample_rate, output='sos')
            filtered_data = signal.sosfiltfilt(sos, data)
            return filtered_data

        def intensityNormalize(data) :
            _peak = np.max(np.abs(data))
            return data/_peak

        MY_AUDIO={}
        def loadAudio(name) :
            loaded = sound.AudioClip.load(f'audio/{name}.wav')
            loaded = loaded.samples.reshape(1,-1)
            MY_AUDIO[name] = loaded

        def makeAudio(wave) :
            return sound.AudioClip(wave.reshape(-1,1), 48000)
      Before JS Experiment:
        function butter_highpass_filter(data, cutoff, fs, order=5) {
            var iirCalculator = new Fili.CalcCascades();
            // get available filters
            var availableFilters = iirCalculator.available();
            // calculate filter coefficients
            var iirFilterCoeffs = iirCalculator.highpass({
                order: order, // cascade 3 biquad filters (max: 12)
                characteristic: 'butterworth',
                Fs: fs, // sampling frequency
                Fc: cutoff, // cutoff frequency / center frequency for bandpass, bandstop, peak
                gain: 0, // gain for peak, lowshelf and highshelf
                preGain: false // adds one constant multiplication for highpass and lowpass
            });
            // create a filter instance from the calculated coeffs
            var iirFilter = new Fili.IirFilter(iirFilterCoeffs);
            return iirFilter.multiStep(data);
        }
        const MY_AUDIO={};
        const MY_AUDIO_CTX = new AudioContext();
        async function loadAudio(name) {
            myResponse = await fetch(`audio/${name}.wav`);
            myBuffer = await myResponse.arrayBuffer();
            myDecoded = await MY_AUDIO_CTX.decodeAudioData(myBuffer);
            MY_AUDIO[name] = myDecoded.getChannelData(0);
        }

        function makeAudio(wave) {
            wav = new wavefile.WaveFile();
            wav.fromScratch(1, 48000, '32f', wave);
            blob = new Blob([wav.toBuffer()]);
            return new sound.AudioClip({ psychoJS : psychoJS, format : "wav", sampleRateHz : 48000, data : blob })
        }
      Begin Experiment:
        for number in targets :
            loadAudio(number)
        for character in distractors :
            loadAudio(character)
        loadAudio('_')
      Begin JS Experiment:
        for (var number, _pj_c = 0, _pj_a = targets, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            number = _pj_a[_pj_c];
            await loadAudio(number);
        }
        for (var character, _pj_c = 0, _pj_a = distractors, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            character = _pj_a[_pj_c];
            await loadAudio(character);
        }
        await loadAudio('_');
    CodeComponent set_opacity
      Code Type = Auto->JS
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      Begin Experiment:
        enableVisual = expInfo['tokenAudio/Visual'].split('/')[1]
      Begin Routine:
        if enableVisual.lower() != 'yes' :
            OPACITY = 0
        else :
            OPACITY = opacity
    CodeComponent set_sound
      Code Type = Auto->JS
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      Begin Experiment:
        enableAudio = expInfo['tokenAudio/Visual'].split('/')[0]
      Begin Routine:
        soundArray = []
        path = ''
        for tok in token :
            if enableAudio.lower() == 'yes' :
                path = 'audio/' + tok + '.wav'
            else :
                path = 'audio/_.wav'
            soundArray.append(path)
    CodeComponent setBeeps
      Code Type = Auto->JS
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      Before Experiment:
        def generateWave(frequency, duration, amplitude, sampling=48000) :
            # frequency : in Hz
            # duration : in seconds
            _clockTicks = range(int(sampling*duration))
            _sineSignal = []
            for i in _clockTicks :
                _sineSignal.append(amplitude * sin((2*pi*frequency/sampling)*i))
            return _sineSignal

        def generateInterval(duration, sampling=48000) :
            _signal = []
            for i in range(int(duration*sampling)) :
                _signal.append(0)
            return _signal

        def hann (i,N) :
            return 0.5*(1 - cos(6.283185307179586*i/(N-1)))

        def hannWindow(N) :
            _window = []
            for i in range(N) :
                _window.append(hann(i,N))
            return _window

        def apodize(soundArray, rampSize=0.005, sampleRate=48000) :
            # rampSize in seconds
            _hwSize = int(sampleRate * rampSize)
            _window = hannWindow(2*_hwSize + 1)
            _length = len(soundArray)
            for i in range(_hwSize) :
                soundArray[i] *= _window[i]
                soundArray[_length-_hwSize+i] *= _window[_hwSize+1+i]
            return soundArray

        def generateSoundbin(frequency, duration, interval, amplitude, sampling=48000, rampSize=0.005) :
            # Generate a pip
            _sineWave = generateWave(frequency, duration, amplitude, sampling)
            #
            #sine_wave = apply_compensation(sine_wave, sampling=sampling)
            # apply hann window
            _sineWave = apodize(_sineWave, rampSize, sampling)
            # add inter-pip interval
            _silent = generateInterval(interval, sampling)

            _soundBin = []
            for v in _sineWave :
                _soundBin.append(v)
            for v in _silent :
                _soundBin.append(v)
            return _soundBin

        def gaussianRandom(mean=0, stdev=1) :
            _u = 1 - random() # Converting [0,1) to (0,1]
            _v = random()
            _z = sqrt( -2.0 * log( _u ) ) * cos( 2.0 * pi * _v )
            # Transform to the desired mean and standard deviation:
            return _z * stdev + mean

        def generateAuditorySequence(nbins, initialFrequency,
                                       deltaGauss, toneDuration,
                                       interToneInterval,
                                       amplitude,
                                       sampling=48000,
                                       rampSize=0.005,
                                       std=1.0) :
            _sequence = []
            for i in range(nbins) :
                selected = gaussianRandom(initialFrequency + deltaGauss*i, std)
                abin = generateSoundbin(selected,
                                        toneDuration,
                                        interToneInterval,
                                        amplitude,
                                        sampling,
                                        rampSize)
                for v in abin :
                    _sequence.append(v)
            return _sequence
      Begin Experiment:
        distractorsSetting = expInfo['distractorsSetting'].split('/')

        acousticSetting = distractorsSetting[0].split('-')

        enableAcoustic = acousticSetting[1]
        acousticTargetMatch = acousticSetting[2]

        acousticVolume = float(acousticSetting[3])

        #deltaGauss = float(expInfo['deltaGauss'])
      Begin Routine:
        beeps = []

        BEEPDIRTARGET = 1
        BEEPDIRNONTARGET = -1

        if acousticTargetMatch != 'up' :
            BEEPDIRTARGET = -1
            BEEPDIRNONTARGET = 1


        beepDirList = []
        beepNonTargetIndex = []
        for i in range(len(token)) :
            if token[i] in targets :
                beepDirList.append(BEEPDIRTARGET)
            else :
                beepDirList.append(0)
                beepNonTargetIndex.append(i)

        shuffle(beepNonTargetIndex)
        beepDirList[beepNonTargetIndex[0]] = BEEPDIRNONTARGET
        beepDirList[beepNonTargetIndex[1]] = BEEPDIRNONTARGET

        beep=None
        for beepDir in beepDirList :
            beep = generateAuditorySequence(nbins,
                                 initialFrequency,
                                 deltaGauss * beepDir,
                                 toneDuration,
                                 interToneInterval,
                                 acousticVolume,
                                 48000,
                                 rampSize,
                                 stdevTone)
            beeps.push(beep)
    CodeComponent setRDKDir
      Code Type = Auto->JS
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      Begin Experiment:
        rdkSetting = distractorsSetting[1].split('-')

        enableRDK = rdkSetting[1]
        rdkTargetMatch = rdkSetting[2]

        #rdkCoherence = float(expInfo['rdkCoherence'])
      Begin Routine:
        rdkDir = []

        RDKSIGNALDIR = 'L'
        RDKSIGOPPOSITEDIR = 'R'
        if rdkTargetMatch != 'L' :
            RDKSIGNALDIR = 'R'
            RDKSIGOPPOSITEDIR = 'L'

        nonSignalPos = []
        for i in range(len(token)) :
            if token[i] in targets :
                rdkDir.append(RDKSIGNALDIR)
            else :
                nonSignalPos.append(i)
                rdkDir.append('_')

        shuffle(nonSignalPos)

        rdkDir[nonSignalPos[0]] = RDKSIGOPPOSITEDIR
        rdkDir[nonSignalPos[1]] = RDKSIGOPPOSITEDIR
  Routine endScreen
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press space to end
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine endBlock
    TextComponent endBlockText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"This is the end of block " + str(blocks.thisN+1) + " of " + str(blocks.nTotal) +"\n\nPress SPACE to continue."
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent save
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.save()
Flow
  Routine welcome
  LoopInitiator loop_set loopType="TrialHandler"
    conditions = [OrderedDict([('nreps', 20), ('nBlocks', 2)])]
    conditionsFile = parameters.csv
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator blocks loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = nBlocks
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      LoopInitiator trials loopType="TrialHandler"
        conditions = [OrderedDict([('opacity', 0.15), ('nbins', 20), ('initialFrequency', 1000), ('toneDuration', 0.015), ('interToneInterval', 0.01), ('rampSize', 0.005), ('stdevTone', 20), ('deltaGauss', 20), ('rdkLifeTime', 4), ('rdkSpeed', 0.01), ('rdkCoherence', 0.75)])]
        conditionsFile = difficulties.csv
        loopType = fullRandom
        nReps = nreps
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        Routine prepare
        Routine trial
        Routine answer
      LoopTerminator trials
      Routine endBlock
    LoopTerminator blocks
  LoopTerminator loop_set
  Routine endScreen
